CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:18
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:raw_image
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:raw_image
    Conversion method:Split
    Image type:Channels
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    Channel count:3
    Channel number:1
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    Image name:DAPI
    Channel number:2
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    Image name:Signal
    Channel number:3
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    Image name:MT

IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):150,500
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
ExpandOrShrinkObjects:[module_num:7|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
    Select the input objects:Nuclei
    Name the output objects:ShrunkenNuclei
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:7
    Fill holes in objects so that all objects shrink to a single point?:No

IdentifyTertiaryObjects:[module_num:8|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
    Select the larger identified objects:Nuclei
    Select the smaller identified objects:ShrunkenNuclei
    Name the tertiary objects to be identified:nuclearMembrane
    Shrink smaller object prior to subtraction?:No

IdentifySecondaryObjects:[module_num:9|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:MT
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
IdentifyTertiaryObjects:[module_num:10|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

MeasureObjectIntensity:[module_num:11|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
    Hidden:1
    Select an image to measure:Signal
    Select objects to measure:Nuclei
    Select objects to measure:nuclearMembrane
    Select objects to measure:Cytoplasm

CalculateMath:[module_num:12|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
    Name the output measurement:Ratio_Membrane_Nuclei
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:nuclearMembrane
    Select the numerator measurement:Intensity_MeanIntensity_Signal
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:Nuclei
    Select the denominator measurement:Intensity_MeanIntensity_Signal
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:13|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
    Name the output measurement:Ratio_Cytoplasm_Nuclei
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Cytoplasm
    Select the numerator measurement:Intensity_MeanIntensity_Signal
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:Nuclei
    Select the denominator measurement:Intensity_MeanIntensity_Signal
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
ExportToSpreadsheet:[module_num:14|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Cytoplasm|Math_Ratio_Cytoplasm_Nuclei,Image|Count_ShrunkenNuclei,Image|Count_Nuclei,Image|Count_nuclearMembrane,Image|FileName_raw_image,Experiment|Modification_Timestamp,Experiment|Pipeline_Pipeline,Experiment|CellProfiler_Version,Experiment|Run_Timestamp,nuclearMembrane|Math_Ratio_Membrane_Nuclei
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:results_
    Overwrite existing files without warning?:No
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
GrayToColor:[module_num:15|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
    Select a color scheme:RGB
    Select the image to be colored red:MT
    Select the image to be colored green:Signal
    Select the image to be colored blue:DAPI
    Name the output image:raw_RGB
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
OverlayOutlines:[module_num:16|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:raw_RGB
    Name the output image:RawImage_Overlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:white
    Select objects to display:nuclearMembrane

DisplayDataOnImage:[module_num:17|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
    Display object or image measurements?:Object
    Select the input objects:Nuclei
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:RawImage_Overlay
    Text color:white
    Name the output image that has the measurements displayed:RawImage_Overlay_ObjN
    Font size (points):20
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:18|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
    Select the type of image to save:Image
    Select the image to save:RawImage_Overlay_ObjN
    Select method for constructing file names:From image filename
    Select image name for file prefix:raw_image
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Overlay
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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